PsychoPy2experiment version="1.85.6"
Settings
  Monitor = testMonitor
  color = white
  Experiment info = {u'gender': u'', u'age': u'', u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1366, 768]
  Full-screen window = True
  expName = PEP_mt
  Screen = 1
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Routines
  Routine start_button
    PolygonComponent True_rect_2
      fillColor = black
      pos = (-1, 1)
      startVal [time (s)] = 0.0
      size = (0.5, 0.5)
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    PolygonComponent False_rect_2
      fillColor = black
      pos = (1, 1)
      startVal [time (s)] = 0.0
      size = (0.5, 0.5)
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    TextComponent True_resp_2
      text =   TRUE
      pos = (-.9, .87)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    TextComponent False_resp_2
      text =    FALSE
      pos = (.85, .87)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    PolygonComponent start_box
      fillColor = black
      stopVal [condition] = start_word.status==FINISHED
      pos = (0, -.95)
      startVal [time (s)] = 0.0
      size = (0.2, 0.1)
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    TextComponent start_word
      text = START
      stopVal [condition] = start_box.status==FINISHED
      pos = (0, -.95)
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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    CodeComponent code_2
      Each Frame:
        if mouse.isPressedIn(start_box, buttons=[0]):
                continueRoutine=False
  Routine end
    TextComponent end_message
      color = black
      stopVal [condition] = event.getKeys()
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        Thanks for participating! You can let the experimenter know that you’re finished.

        Press any key to exit.
  Routine ITI
    TextComponent text
      stopVal [duration (s)] = .5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    PolygonComponent True_rect
      fillColor = black
      stopVal [duration (s)] = .5
      pos = (-1, 1)
      startVal [time (s)] = 0.0
      size = (0.5, 0.5)
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    PolygonComponent False_rect
      fillColor = black
      stopVal [duration (s)] = .5
      pos = (1, 1)
      startVal [time (s)] = 0.0
      size = (0.5, 0.5)
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    TextComponent True_resp
      text =   TRUE
      stopVal [duration (s)] = .5
      pos = (-.9, .87)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    TextComponent False_resp
      text =    FALSE
      stopVal [duration (s)] = .5
      pos = (.85, .87)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    CodeComponent code_3
  Routine practice
    PolygonComponent true_rect_2
      fillColor = black
      pos = (-1, 1)
      startVal [time (s)] = 0.0
      size = (.5, .5)
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    PolygonComponent false_rect_2
      fillColor = black
      pos = (1, 1)
      startVal [time (s)] = 0.0
      size = (.5, .5)
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    TextComponent true_resp_2
      text =   TRUE
      pos = (-.9, .87)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    TextComponent false_resp_2
      text =    FALSE
      pos = (.85, .87)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    TextComponent crosshairs_2
      color = black
      text = +
      stopVal [duration (s)] = .5
      startVal [time (s)] = 0
      letterHeight = 0.1
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    TextComponent word1_2
      color = black
      text [set every repeat] = $word_1
      stopVal [duration (s)] = $duration_1
      startVal [condition] = crosshairs_2.status==FINISHED
      letterHeight = 0.1
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    TextComponent word2_2
      color = black
      text [set every repeat] = $word_2
      stopVal [duration (s)] = $duration_2
      startVal [condition] = word1_2.status==FINISHED
      letterHeight = 0.1
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    TextComponent word3_2
      color = black
      text [set every repeat] = $word_3
      stopVal [duration (s)] = $duration_3
      startVal [condition] = word2_2.status==FINISHED
      letterHeight = 0.1
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    TextComponent word4_2
      color = black
      text [set every repeat] = $word_4
      stopVal [duration (s)] = $duration_4
      startVal [condition] = word3_2.status==FINISHED
      letterHeight = 0.1
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    TextComponent word5_2
      color = black
      text [set every repeat] = $word_5
      stopVal [duration (s)] = $duration_5
      startVal [condition] = word4_2.status==FINISHED
      letterHeight = 0.1
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    TextComponent word6_2
      color = black
      text [set every repeat] = $word_6
      stopVal [duration (s)] = $duration_6
      startVal [condition] = word5_2.status==FINISHED
      letterHeight = 0.1
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    TextComponent word7_2
      color = black
      text [set every repeat] = $word_7
      stopVal [duration (s)] = $duration_7
      startVal [condition] = word6_2.status==FINISHED
      letterHeight = 0.1
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    TextComponent blank_2
      stopVal [duration (s)] = .4
      startVal [condition] = word7_2.status==FINISHED
      letterHeight = 0.1
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    TextComponent probe_word_2
      color = black
      text [set every repeat] = $probe
      stopVal [condition] = mouse.isPressedIn(false_rect, buttons=[0]) or mouse.isPressedIn(true_rect, buttons=[0])
      startVal [condition] = blank_2.status==FINISHED
      letterHeight = 0.1
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    TextComponent wrong_2
      color = red
      text = X
      stopVal [duration (s)] = 2
      startVal [condition] = probe_word_2.status == FINISHED
      letterHeight = 0.2
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    CodeComponent code_5
      Begin Experiment:
        from psychopy import visual
        import numpy as np
        from psychopy import visual, core, event

        mouse = event.Mouse()
      Begin Routine:
        mouse = event.Mouse()
        mouse.setPos([0,-.8]) ## Set mouse position outside of mouse_tester range

        tmouse = mouse.getPos()
        tclock = core.Clock()
        mouse_test = 0
        check_time = 0
        accuracy = 0
      End Routine:
        ## Add accuracy data to data file
        practice_trials.addData('accuracy', accuracy)
        practice_trials.addData('RT', tclock.getTime())
        if mouse_test > 0:
            practice_trials.addData('init.time', 'slow')
        if mouse_test == 0:
            practice_trials.addData('init.time', 'ok')
      Each Frame:
        import numpy as np
        from psychopy import visual, core, event

        ### Hide mouse at start of trial
        if probe_word_2.status == NOT_STARTED:
            event.Mouse(visible = False)

        ### Show mouse and set mouse position, reset tclock component for timing
        if probe_word_2.status == STARTED and check_time == 0:
            event.Mouse(visible = True)
            mouse.setPos([0, -.95])
            tclock.reset()
            check_time = check_time + 1

        ## If mouse hasn't moved after specified time, add 1 to mouse_test
        ## (which leads to the execution of the 'warning' routine
        if tclock.getTime() > .6 and mouse_tester_2.contains(mouse):
            mouse_test = mouse_test + 1


        ### Sets parameters for true and false criteria by condition
        if condition == "tc":
            if mouse.isPressedIn(true_rect_2, buttons=[0]):
                continueRoutine=False
            if mouse.isPressedIn(false_rect_2, buttons=[0]):
                continueRoutine=True
        if condition == "ti":
            if mouse.isPressedIn(true_rect_2, buttons=[0]):
                continueRoutine=False
            if mouse.isPressedIn(false_rect_2, buttons=[0]):
                continueRoutine=True
        if condition == "te":
            if mouse.isPressedIn(true_rect_2, buttons=[0]):
                continueRoutine=False
            if mouse.isPressedIn(false_rect_2, buttons=[0]):
                continueRoutine=True
        if condition == "fc":
            if mouse.isPressedIn(false_rect_2, buttons=[0]):
                continueRoutine=False
            if mouse.isPressedIn(true_rect_2, buttons=[0]):
                continueRoutine=True
        if condition == "fi":
            if mouse.isPressedIn(false_rect_2, buttons=[0]):
                continueRoutine=False
            if mouse.isPressedIn(true_rect_2, buttons=[0]):
                continueRoutine=True
        if condition == "fe":
            if mouse.isPressedIn(false_rect_2, buttons=[0]):
                continueRoutine=False
            if mouse.isPressedIn(true_rect_2, buttons=[0]):
                continueRoutine=True

        ## Add data to data file
        if (condition == "tc" or condition == "ti" or condition == "te") and mouse.isPressedIn(true_rect_2, buttons=[0]):
            accuracy = "correct"
        if (condition == "fc" or condition == "fi" or condition == "fe") and mouse.isPressedIn(false_rect_2, buttons=[0]):
            accuracy = "correct"
        if (condition == "tc" or condition == "ti" or condition == "te") and mouse.isPressedIn(false_rect_2, buttons=[0]):
            accuracy = "incorrect"
        if (condition == "fc" or condition == "fi" or condition == "fe") and mouse.isPressedIn(true_rect_2, buttons=[0]):
            accuracy = "incorrect"


        ## Ends routine after presentation of 'wrong' feedback
        if wrong_2.status == FINISHED:
            continueRoutine=False
    MouseComponent mouse_2
      timeRelativeTo = routine
      forceEndRoutineOnPress = False
      startVal [condition] = probe_word_2.status==STARTED
      saveMouseState = every frame
    PolygonComponent mouse_tester_2
      opacity = 0
      fillColor = white
      pos = (0, -.95)
      startVal [time (s)] = 0
      nVertices = 90
      size = (0.05, 0.05)
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  Routine trial
    PolygonComponent true_rect
      fillColor = black
      pos = (-1, 1)
      startVal [time (s)] = 0.0
      size = (.5, .5)
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    PolygonComponent false_rect
      fillColor = black
      pos = (1, 1)
      startVal [time (s)] = 0.0
      size = (.5, .5)
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    TextComponent true_resp
      text =   TRUE
      pos = (-.9, .87)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    TextComponent false_resp
      text =    FALSE
      pos = (.85, .87)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    TextComponent crosshairs
      color = black
      text = +
      stopVal [duration (s)] = .5
      startVal [time (s)] = 0
      letterHeight = 0.1
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    TextComponent word1
      color = black
      text [set every repeat] = $word_1
      stopVal [duration (s)] = $duration_1
      startVal [condition] = crosshairs.status==FINISHED
      letterHeight = 0.1
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    TextComponent word2
      color = black
      text [set every repeat] = $word_2
      stopVal [duration (s)] = $duration_2
      startVal [condition] = word1.status==FINISHED
      letterHeight = 0.1
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    TextComponent word3
      color = black
      text [set every repeat] = $word_3
      stopVal [duration (s)] = $duration_3
      startVal [condition] = word2.status==FINISHED
      letterHeight = 0.1
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    TextComponent word4
      color = black
      text [set every repeat] = $word_4
      stopVal [duration (s)] = $duration_4
      startVal [condition] = word3.status==FINISHED
      letterHeight = 0.1
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    TextComponent word5
      color = black
      text [set every repeat] = $word_5
      stopVal [duration (s)] = $duration_5
      startVal [condition] = word4.status==FINISHED
      letterHeight = 0.1
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    TextComponent word6
      color = black
      text [set every repeat] = $word_6
      stopVal [duration (s)] = $duration_6
      startVal [condition] = word5.status==FINISHED
      letterHeight = 0.1
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    TextComponent word7
      color = black
      text [set every repeat] = $word_7
      stopVal [duration (s)] = $duration_7
      startVal [condition] = word6.status==FINISHED
      letterHeight = 0.1
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    TextComponent blank
      stopVal [duration (s)] = .4
      startVal [condition] = word7.status==FINISHED
      letterHeight = 0.1
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    TextComponent probe_word
      color = black
      text [set every repeat] = $probe
      stopVal [condition] = mouse.isPressedIn(false_rect, buttons=[0]) or mouse.isPressedIn(true_rect, buttons=[0])
      startVal [condition] = blank.status==FINISHED
      letterHeight = 0.1
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    TextComponent wrong
      color = red
      text = X
      stopVal [duration (s)] = 2
      startVal [condition] = probe_word.status == FINISHED
      letterHeight = 0.2
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    CodeComponent code
      Begin Experiment:
        from psychopy import visual
        import numpy as np
        from psychopy import visual, core, event

        mouse = event.Mouse()
      Begin Routine:
        mouse = event.Mouse()
        mouse.setPos([0,-.8]) ## Set mouse position outside of mouse_tester range

        tmouse = mouse.getPos()
        tclock = core.Clock()
        mouse_test = 0
        check_time = 0
        accuracy = 0
      End Routine:
        ## Add accuracy data to data file
        main_task.addData('accuracy', accuracy)
        main_task.addData('RT', tclock.getTime())
        if mouse_test > 0:
            main_task.addData('init.time', 'slow')
        if mouse_test == 0:
            main_task.addData('init.time', 'ok')
      Each Frame:
        import numpy as np
        from psychopy import visual, core, event

        ### Hide mouse at start of trial
        if probe_word.status == NOT_STARTED:
            event.Mouse(visible = False)

        ### Show mouse and set mouse position, reset tclock component for timing
        if probe_word.status == STARTED and check_time == 0:
            event.Mouse(visible = True)
            mouse.setPos([0, -.95])
            tclock.reset()
            check_time = check_time + 1

        ## If mouse hasn't moved after specified time, add 1 to mouse_test
        ## (which leads to the execution of the 'warning' routine
        if tclock.getTime() > .6 and mouse_tester.contains(mouse):
            mouse_test = mouse_test + 1


        ### Sets parameters for true and false criteria by condition
        if condition == "tc":
            if mouse.isPressedIn(true_rect, buttons=[0]):
                continueRoutine=False
            if mouse.isPressedIn(false_rect, buttons=[0]):
                continueRoutine=True
        if condition == "ti":
            if mouse.isPressedIn(true_rect, buttons=[0]):
                continueRoutine=False
            if mouse.isPressedIn(false_rect, buttons=[0]):
                continueRoutine=True
        if condition == "te":
            if mouse.isPressedIn(true_rect, buttons=[0]):
                continueRoutine=False
            if mouse.isPressedIn(false_rect, buttons=[0]):
                continueRoutine=True
        if condition == "fc":
            if mouse.isPressedIn(false_rect, buttons=[0]):
                continueRoutine=False
            if mouse.isPressedIn(true_rect, buttons=[0]):
                continueRoutine=True
        if condition == "fi":
            if mouse.isPressedIn(false_rect, buttons=[0]):
                continueRoutine=False
            if mouse.isPressedIn(true_rect, buttons=[0]):
                continueRoutine=True
        if condition == "fe":
            if mouse.isPressedIn(false_rect, buttons=[0]):
                continueRoutine=False
            if mouse.isPressedIn(true_rect, buttons=[0]):
                continueRoutine=True

        ## Add data to data file
        if (condition == "tc" or condition == "ti" or condition == "te") and mouse.isPressedIn(true_rect, buttons=[0]):
            accuracy = "correct"
        if (condition == "fc" or condition == "fi" or condition == "fe") and mouse.isPressedIn(false_rect, buttons=[0]):
            accuracy = "correct"
        if (condition == "tc" or condition == "ti" or condition == "te") and mouse.isPressedIn(false_rect, buttons=[0]):
            accuracy = "incorrect"
        if (condition == "fc" or condition == "fi" or condition == "fe") and mouse.isPressedIn(true_rect, buttons=[0]):
            accuracy = "incorrect"


        ## Ends routine after presentation of 'wrong' feedback
        if wrong.status == FINISHED:
            continueRoutine=False
    MouseComponent mouse
      timeRelativeTo = routine
      forceEndRoutineOnPress = False
      startVal [condition] = probe_word.status==STARTED
      saveMouseState = every frame
    PolygonComponent mouse_tester
      opacity = 0
      fillColor = white
      pos = (0, -.95)
      startVal [time (s)] = 0
      nVertices = 90
      size = (0.05, 0.05)
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  Routine warning
    PolygonComponent false_rect1
      fillColor = black
      pos = (1, 1)
      startVal [time (s)] = 0.0
      size = (0.5, 0.5)
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    PolygonComponent true_rect1
      fillColor = black
      pos = (-1, 1)
      startVal [time (s)] = 0.0
      size = (0.5, 0.5)
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    TextComponent true_resp1
      text =   TRUE
      pos = (-.9, .87)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    TextComponent false_resp1
      text =    FALSE
      pos = (.85, .87)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    CodeComponent code_4
      Begin Routine:
        if mouse_test == 0:
            continueRoutine = False
        if mouse_test == 1:
            continueRoutine = True
      Each Frame:
        if mouse.isPressedIn(continue_button, buttons=[0]):
                continueRoutine=False
    TextComponent warning_
      color = red
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        YOU NEED TO BE FASTER!

        Please begin responding as soon as possible, even if you are unsure of how to respond.
    PolygonComponent continue_button
      fillColor = black
      pos = (.8, -.8)
      startVal [time (s)] = 1
      size = (0.25, 0.15)
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    TextComponent OK_text
      text = Click here to continue
      stopVal [condition] = continue_button.status==FINISHED
      pos = (.8, -.8)
      startVal [time (s)] = 1
      letterHeight = 0.03
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  Routine start_instructions
    TextComponent continue_prompt
      color = black
      text = Press the SPACEBAR to continue
      stopVal [condition] = instruct_7.status==FINISHED
      pos = (.65, -.95)
      startVal [condition] = instruct_1.status==FINISHED
      letterHeight = 0.04
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    TextComponent instruct_1
      color = black
      stopVal [condition] = event.getKeys('space')
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
                Welcome to the study!

        Press the SPACEBAR to begin.
    TextComponent instruct_2
      wrapWidth = 1
      color = black
      stopVal [condition] = event.getKeys('space')
      startVal [condition] = instruct_1.status==FINISHED
      letterHeight = 0.05
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      text:
        In this task, you will be presented with a number of trials.

        For all trials, you will be required to use the mouse to select a response: either "TRUE" or "FALSE".

        Each trial will begin with the presentation of a sentence, with each word of the sentence appearing one after the other. Ensure that you read each sentence carefully as it is presented.
    TextComponent instruct_3
      wrapWidth = 1
      color = black
      stopVal [condition] = event.getKeys('space')
      startVal [condition] = instruct_2.status==FINISHED
      letterHeight = 0.05
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      text:
        Following the presentation of each sentence, one of two prompts will follow.

        The first kind of prompt is “?? TRUE OR FALSE??”. If you see this prompt, then you should respond based on the whether or not the previous sentence was true or false.

        For example, if the previous sentence was “Saturn is a planet”, then select “TRUE”.
    TextComponent instruct_4
      color = black
      stopVal [condition] = event.getKeys('space')
      startVal [condition] = instruct_3.status==FINISHED
      letterHeight = 0.05
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      text:
        The second kind of prompt is the presentation of either the word “TRUE” or the word “FALSE”. If you see this prompt, then you should respond in accordance with the prompt.

        That is, if the prompt is “TRUE”, then respond “TRUE”, and if the prompt is “FALSE”, then respond “FALSE”.


        Importantly, for these prompts, you can ignore the truth or falsity of the previous sentence.
    TextComponent instruct_5
      color = black
      stopVal [condition] = event.getKeys('space')
      startVal [condition] = instruct_4.status==FINISHED
      letterHeight = 0.05
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      text:
        For example, if you saw the sentence “Saturn is a planet”, and the probe was “FALSE”, then you should respond “FALSE”, even though the sentence is true.

        Likewise, if you saw “Saturn is a continent” and the probe was “TRUE”, then respond “TRUE”, even though the sentence is false.
    TextComponent instruct_6
      color = black
      stopVal [condition] = event.getKeys('space')
      startVal [condition] = instruct_5.status==FINISHED
      letterHeight = 0.05
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      text:
        You should begin moving the mouse on all trials as soon as possible, even if you are unsure of how you’re going to respond.

        If you do not begin to respond quickly enough, you will be presented with a message informing you to respond more quickly.
    TextComponent instruct_7
      wrapWidth = 1
      color = black
      stopVal [condition] = event.getKeys('space')
      startVal [condition] = instruct_6.status==FINISHED
      letterHeight = 0.05
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      text:
        You will now be given the opportunity to practice the task.

                                            Remember:

        If you see “??TRUE OR FALSE??”, then respond based on the truth value of the sentence.

        If you see “TRUE” or “FALSE”, then respond based on the word and ignore the truth value of the sentence.

        Begin responding as quickly as possible, even if you are uncertain.
    TextComponent begin_practice_trials
      color = black
      text = Press ENTER to begin practice trials
      stopVal [condition] = event.getKeys('space')
      startVal [condition] = instruct_7.status==FINISHED
      letterHeight = 0.07
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  Routine interim_instructions
    TextComponent interim_instruct
      color = black
      stopVal [condition] = event.getKeys('space')
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        Good! You will now begin the main task. This should take about 40 minutes to complete.

        When you are ready to begin, press ENTER.
Flow
  Routine start_instructions
  LoopInitiator practice_trials loopType="TrialHandler"
    conditionsFile = 10%_practice.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'word_3': u'IS', 'word_2': u'CUP', 'word_1': u'A', 'probe': u'TRUE', 'word_7': u'BOAT', 'word_6': u'A', 'word_5': u'THAN', 'word_4': u'SMALLER', 'duration_7': 0.5, 'duration_6': 0.175, 'duration_5': 0.25, 'duration_4': 0.325, 'duration_3': 0.2, 'duration_2': 0.225, 'duration_1': 0.175, 'condition': u'tc'},
      {'word_3': u'IS', 'word_2': u'CUP', 'word_1': u'A', 'probe': u'FALSE', 'word_7': u'BOAT', 'word_6': u'A', 'word_5': u'THAN', 'word_4': u'LARGER', 'duration_7': 0.5, 'duration_6': 0.175, 'duration_5': 0.25, 'duration_4': 0.325, 'duration_3': 0.2, 'duration_2': 0.225, 'duration_1': 0.175, 'condition': u'fi'},
      {'word_3': u'IS', 'word_2': u'BOAT', 'word_1': u'A', 'probe': u'FALSE', 'word_7': u'CUP', 'word_6': u'A', 'word_5': u'THAN', 'word_4': u'SMALLER', 'duration_7': 0.5, 'duration_6': 0.175, 'duration_5': 0.25, 'duration_4': 0.325, 'duration_3': 0.2, 'duration_2': 0.25, 'duration_1': 0.175, 'condition': u'fc'},
      {'word_3': u'IS', 'word_2': u'BOAT', 'word_1': u'A', 'probe': u'TRUE', 'word_7': u'CUP', 'word_6': u'A', 'word_5': u'THAN', 'word_4': u'LARGER', 'duration_7': 0.5, 'duration_6': 0.175, 'duration_5': 0.25, 'duration_4': 0.325, 'duration_3': 0.2, 'duration_2': 0.25, 'duration_1': 0.175, 'condition': u'ti'}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
    Routine start_button
    Routine practice
    Routine warning
    Routine ITI
  LoopTerminator practice_trials
  Routine interim_instructions
  LoopInitiator main_task loopType="TrialHandler"
    conditionsFile = 10%_stim.csv
    loopType = random
    nReps = 2
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    conditions:
      [{'word_3': u'IS', 'word_2': u'CUP', 'word_1': u'A', 'probe': u'TRUE', 'word_7': u'BOAT', 'word_6': u'A', 'word_5': u'THAN', 'word_4': u'SMALLER', 'duration_7': 0.5, 'duration_6': 0.175, 'duration_5': 0.25, 'duration_4': 0.325, 'duration_3': 0.2, 'duration_2': 0.225, 'duration_1': 0.175, 'condition': u'tc'},
      {'word_3': u'IS', 'word_2': u'CUP', 'word_1': u'A', 'probe': u'FALSE', 'word_7': u'BOAT', 'word_6': u'A', 'word_5': u'THAN', 'word_4': u'LARGER', 'duration_7': 0.5, 'duration_6': 0.175, 'duration_5': 0.25, 'duration_4': 0.325, 'duration_3': 0.2, 'duration_2': 0.225, 'duration_1': 0.175, 'condition': u'fi'},
      {'word_3': u'IS', 'word_2': u'BOAT', 'word_1': u'A', 'probe': u'FALSE', 'word_7': u'CUP', 'word_6': u'A', 'word_5': u'THAN', 'word_4': u'SMALLER', 'duration_7': 0.5, 'duration_6': 0.175, 'duration_5': 0.25, 'duration_4': 0.325, 'duration_3': 0.2, 'duration_2': 0.25, 'duration_1': 0.175, 'condition': u'fc'},
      {'word_3': u'IS', 'word_2': u'BOAT', 'word_1': u'A', 'probe': u'TRUE', 'word_7': u'CUP', 'word_6': u'A', 'word_5': u'THAN', 'word_4': u'LARGER', 'duration_7': 0.5, 'duration_6': 0.175, 'duration_5': 0.25, 'duration_4': 0.325, 'duration_3': 0.2, 'duration_2': 0.25, 'duration_1': 0.175, 'condition': u'ti'}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
    Routine start_button
    Routine trial
    Routine warning
    Routine ITI
  LoopTerminator main_task
  Routine end
